OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, Spatial Filter box, and Classifier Trainer to correct directory

  Generic Stream Reader should be training data
Settings
  Epoch Duration = 2
  Epoch Offset = 0

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha Wave"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaCSP
Clock stimulator => #4
  Interstimulation interval (in sec) = 1.0
  Stimulation = OVTK_StimulationId_Label_0A
Input stream 1=#3, Input stream 2=#4 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Eyes Open epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
  Stimulation 6 = OVTK_StimulationId_Label_0A
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaWaveClassifier
#10.Labels -> Stimulation listener
  Log level to use = Information
#10.Labels -> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/roenz/Desktop/SSVEP Car Project/Images/eye-closed.jpg
  Stimulation 1 = OVTK_StimulationId_Label_0A
  Cue Image 2 = C:/Users/roenz/Desktop/SSVEP Car Project/Images/eye-open.jpg
  Stimulation 2 = OVTK_StimulationId_Label_09
  Cue Image 3 = C:/Users/roenz/Desktop/SSVEP Car Project/Images/Up Arrow.jpg
  Stimulation 3 = OVTK_GDF_Up
  Cue Image 4 = C:/Users/roenz/Desktop/SSVEP Car Project/Images/Right Arrow.jpg
  Stimulation 4 = OVTK_GDF_Right
  Cue Image 5 = C:/Users/roenz/Desktop/SSVEP Car Project/Images/Left Arrow.jpg
  Stimulation 5 = OVTK_GDF_Left
  Cue Image 6 = C:/Users/roenz/Desktop/SSVEP Car Project/Images/Down Arrow.jpg
  Stimulation 6 = OVTK_GDF_Down
