OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, CSP Spatial Filter Trainer boxes to correct directory

  Generic Stream Reader should be training data
Comment
  Acquire data from file
  ->
  Select Channels 1:8
  ->
  Filter for Alpha Waves
  ->
  Epoch based on eye condition
  ->
  CSP Spatial Filter Training
Comment
  Reference

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
Settings
  Epoch Duration = 2
  Epoch Offset = 0

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha Wave" => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
Input signal=#2, Input stimulations=#0.Output Stimulations -> Stimulation based epoching "Eyes Open epoching" => #3
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
Input signal=#2, Input stimulations=#0.Output Stimulations -> Stimulation based epoching "Eyes Closed epoching" => #4
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_StimulationId_Label_0A
Clock stimulator => #5
  Interstimulation interval (in sec) = 2536
  Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#0.Output Stimulations, Input stimulations 2=#5 -> Stimulation multiplexer => #6
Stimulations=#6, Signal condition 1=#3, Signal condition 2=#4 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Label_01
  Spatial filter configuration = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaCSP
  Filter dimension = 8
  Save as box config = true
