OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, CSP Spatial Filter Trainer boxes to correct directory

  Generic Stream Reader should be training data
Comment
  Acquiring the data from data file
  ->
  Select the reference channels
  ->
  Bandpass filter for whole range of frequencies
  ->
  Bandstop filters in series to cut off unwanted frequencies (keep wanted frequencies)
  ->
  Epoch data based on label put on the data
  ->
  Use Epoched data to train Spatial Filters
Comment
  Reference

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
Comment
  Modifiable global variables in Scenario Configuration on the right

  Current range is +- .5Hz for frequencies [7, 9, 11, 13]

  Will use bandpass and bandstop filters in series to get only the frequency ranges that we want

  Each cutoff frequency number specifies the range that we want to see
Comment
  Discussion

  Currently my setup will create two CSP Filters that will find the biggest differences
   between 7-9 and 11-13 ssvep class frequencies first and then use those two CSP Filters
  filters to find the difference between the 7,9 combination class and the 11,13
  combination class to get a "master" CSP filter with settings, we need to discuss what class
  would induce the least loss of data, we could also just change electrode placement to so heavily occipital lobe that it doesn't matter
Comment
  Identity box just copies input to output

  Used for organization
Comment
  Increasing Accuracy, Refinement stage

  Will need to experiment with Specific frequency to use as well as frequency ranges
   for baseline, to increase accuracy will need to mess around with Epoch Duration and
   Offset, and Filter Dimension
Comment
  Most important parameter to modify is Epoch Duration and Epoch Offset,
  I don't know exactly what filter dimensions is but when I changed it there was a
  small change to the cross validation accuracy (less than a %) -Andy
Settings
  Epoch Duration = 2
  Epoch Offset = 0
  Filter Dimension = 8
  Cutoff Frequency 1a = 6.5
  Cutoff Frequency 1b = 7.5
  Cutoff Frequency 2a = 8.5
  Cutoff Frequency 2b = 9.5
  Cutoff Frequency 3a = 10.5
  Cutoff Frequency 3b = 11.5
  Cutoff Frequency 4a = 12.5
  Cutoff Frequency 4b = 13.5

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Bandpass (1a - 4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Temporal filter "Bandstop (1b - 2a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
-> Temporal filter "Bandstop (2b - 3a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
-> Temporal filter "Bandstop (3b - 4a)" => #5
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
Clock stimulator => #6
  Interstimulation interval (in sec) = 2536
  Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#0.Output Stimulations, Input stimulations 2=#6 -> Stimulation multiplexer => #7
Input stream 1=#5, Input stream 2=#7 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching "Up Stimulation epoching" => #9
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching "Right Stimulation epoching" => #10
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Right
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching "Left Stimulation epoching" => #11
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Left
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching "Down Stimulation epoching" => #12
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Down
#8.Output stream 2 -> Identity => #13
Stimulations=#13, Signal condition 1=#9, Signal condition 2=#10 -> CSP Spatial Filter Trainer (Stage 1a)
  Train Trigger = OVTK_StimulationId_Label_01
  Spatial filter configuration = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 1a
  Filter dimension = $var{Filter Dimension}
  Save as box config = true
Stimulations=#13, Signal condition 1=#11, Signal condition 2=#12 -> CSP Spatial Filter Trainer (Stage 1b)
  Train Trigger = OVTK_StimulationId_Label_01
  Spatial filter configuration = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 1b
  Filter dimension = $var{Filter Dimension}
  Save as box config = true
