OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, CSP Spatial Filter Trainer box, Spatial Filter boxes to correct directory

  Generic Stream Reader should be training data
Comment
  Acquiring the data from data file
  ->
  Select the reference channels
  ->
  Bandpass filter for whole range of frequencies
  ->
  Bandstop filters in series to cut off unwanted frequencies (keep wanted frequencies)
  ->
  Epoch data based on label put on the data
  ->
  Run epoched data through spatial filters
  ->
  Train Stage 2 Spatial Filter
Comment
  Use previously trained CSP Spatial Filter Matrixes
   to train a "master" CSP Spatial Filter that sees the
   difference between the Up-Right class and the Left-Down class

  Since this outputs a matrix in a configuration file it
   should be fine to just use the configuration file as
  is rather than have cascading spatial filters
Comment
  Confused epoching to have both classes combined
Comment
  Reference

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
Settings
  Epoch Duration = 2
  Epoch Offset = 0
  Filter Dimension = 8
  Cutoff Frequency 1a = 6.5
  Cutoff Frequency 1b = 7.5
  Cutoff Frequency 2a = 8.5
  Cutoff Frequency 2b = 9.5
  Cutoff Frequency 3a = 10.5
  Cutoff Frequency 3b = 11.5
  Cutoff Frequency 4a = 12.5
  Cutoff Frequency 4b = 13.5

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Bandpass (1a - 4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Temporal filter "Bandstop (1b - 2a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
-> Temporal filter "Bandstop (2b - 3a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
-> Temporal filter "Bandstop (3b - 4a)" => #5
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
Clock stimulator => #6
  Interstimulation interval (in sec) = 2536
  Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#0.Output Stimulations, Input stimulations 2=#6 -> Stimulation multiplexer => #7
Input stream 1=#5, Input stream 2=#7 -> Identity => #8
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching "Up-Right Stimulation epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
-> Stage 1a Spatial Filter => #10
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 1a
Input signal=#8.Output stream 1, Input stimulations=#8.Output stream 2 -> Stimulation based epoching "Left-Down Stimulation epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Left
  Stimulation 2 = OVTK_GDF_Down
-> Stage 1b Spatial Filter => #12
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 1b
Stimulations=#8.Output stream 2, Signal condition 1=#10, Signal condition 2=#12 -> CSP Spatial Filter Trainer (Stage 2)
  Train Trigger = OVTK_StimulationId_Label_01
  Spatial filter configuration = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 2
  Filter dimension = $var{Filter Dimension}
  Save as box config = true
