OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Acquiring the data from acquisition server
  ->
  Select the reference channels
  ->
  Write it to a file
Comment
  Change keyboard stimulator file to graz_keyboard_to_stimulations.txt

  We will be using the arrow keys to indicate which box an individual is looking at
  O Key is used to show individual looking away from the screen
  P key is used to show individual is closing eyes
  Click the A key to finish the recording

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
  OVTK_StimulationId_Label_09 (Looking away)
  OVTK_StimulationId_Label_0A (Closed Eyes)
Comment
  Generic stream writer will be writing using a file name that will save the name based on
  the time and date which will prevent overwriting, make sure to change the directory but
  keep the naming convention
Comment
  I need to discuss this -Andy

  10-20 international system standard setup (In order of channel numbers):
  P3, P4, PO3, POz, PO4, O1, Oz, O2

  10-20 international system heavy occipital:
  PO7, PO3, POz, PO4, PO8, O1, Oz, O2

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
Keyboard stimulator => #2
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/CustomKeyboardSetup.txt
-> Stimulation listener
  Log level to use = Information
Input Signal=#1, Input Stimulations=#2 -> Generic stream writer
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[$core{date}-$core{time}]
  Use compression = false
