OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, Spatial Filter box, and Classifier Trainer to correct directory

  Generic Stream Reader should be training data
Settings
  Epoch Duration = 2
  Epoch Offset = 0

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Temporal filter "Alpha Wave"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Spatial Filter => #2
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaCSP
Clock stimulator => #3
  Interstimulation interval (in sec) = 2536
  Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#0.Output Stimulations, Input stimulations 2=#3 -> Stimulation multiplexer => #4
Input stream 1=#2, Input stream 2=#4 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Eyes Open epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #9
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Eyes Closed epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_StimulationId_Label_0A
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #13
Stimulations=#5.Output stream 2, Features for class 1=#9, Features for class 2=#13 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Label_01
  Filename to save configuration to = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaWaveClassifier
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_09
  Class 2 label = OVTK_StimulationId_Label_0A
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = false
  Balance classes = true
