OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, Spatial Filter box, and Classifier Trainer to correct directory

  Generic Stream Reader should be training data
Comment
  Acquiring the data from data file
  ->
  Select the reference channels
  ->
  Bandpass filter for whole range of frequencies
  ->
  Bandstop filters in series to cut off unwanted frequencies (keep wanted frequencies)
  ->
  Spatial filter to get the electrodes that contribute the most to variance
  ->
  Epoch data based on label put on the data
  ->
  Break the data into 4 signals with the same frequency range as our classes
  ->
  Run the signal through a DSP formula
  ->
  Aggregate the signals into a single feature
  ->
  Train the classifier
Comment
  Reference

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
  OVTK_StimulationId_Label_09 (Looking away)
  OVTK_StimulationId_Label_0A (Closed Eyes)
Settings
  Epoch Duration = 2
  Epoch Offset = 0
  Customized DSP Formula = abs(x)
  Cutoff Frequency 1a = 6.5
  Cutoff Frequency 1b = 7.5
  Cutoff Frequency 2a = 8.5
  Cutoff Frequency 2b = 9.5
  Cutoff Frequency 3a = 10.5
  Cutoff Frequency 3b = 11.5
  Cutoff Frequency 4a = 12.5
  Cutoff Frequency 4b = 13.5

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Bandpass (1a - 4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Temporal filter "Bandstop (1b - 2a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
-> Temporal filter "Bandstop (2b - 3a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
-> Temporal filter "Bandstop (3b - 4a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
-> Stage 2 Spatial Filter => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 2
Clock stimulator => #7
  Interstimulation interval (in sec) = 2536
  Stimulation = OVTK_StimulationId_Label_01
Input stimulations 1=#0.Output Stimulations, Input stimulations 2=#7 -> Stimulation multiplexer => #8
Input stream 1=#6, Input stream 2=#8 -> Identity => #9
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "Away Stimulation epoching" => #10
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_StimulationId_Label_09
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #13
#10 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #16
#10 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #19
#10 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #22
Input stream 1=#13, Input stream 2=#16, Input stream 3=#19, Input stream 4=#22 -> Feature aggregator => #23
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "Up Stimulation epoching" => #24
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #27
#24 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #30
#24 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #33
#24 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #36
Input stream 1=#27, Input stream 2=#30, Input stream 3=#33, Input stream 4=#36 -> Feature aggregator => #37
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "Right Stimulation epoching" => #38
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Right
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #41
#38 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #44
#38 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #47
#38 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #50
Input stream 1=#41, Input stream 2=#44, Input stream 3=#47, Input stream 4=#50 -> Feature aggregator => #51
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "Left Stimulation epoching" => #52
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Left
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #55
#52 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #58
#52 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #61
#52 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #64
Input stream 1=#55, Input stream 2=#58, Input stream 3=#61, Input stream 4=#64 -> Feature aggregator => #65
Input signal=#9.Output stream 1, Input stimulations=#9.Output stream 2 -> Stimulation based epoching "Down Stimulation epoching" => #66
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Down
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #69
#66 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #72
#66 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #75
#66 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Simple DSP
  Equation = $var{Customized DSP Formula}
-> Signal average => #78
Input stream 1=#69, Input stream 2=#72, Input stream 3=#75, Input stream 4=#78 -> Feature aggregator => #79
Stimulations=#9.Output stream 2, Features for class 1=#37, Features for class 2=#51, Features for class 3=#65, Features for class 4=#79, Features for class 5=#23 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Label_01
  Filename to save configuration to = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/my-classifier-signal-DSP
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Up
  Class 2 label = OVTK_GDF_Right
  Class 3 label = OVTK_GDF_Left
  Class 4 label = OVTK_GDF_Down
  Class 5 label = OVTK_StimulationId_Label_09
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Number of partitions for k-fold cross-validation test = 10
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Randomize k-fold cross-validation test data = true
  Balance classes = true
