OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, Spatial Filter box, and Classifier Trainer to correct directory

  Generic Stream Reader should be training data
Settings
  Epoch Duration = 2
  Epoch Offset = 0

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha Wave"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaCSP
Input signal=#3, Input stimulations=#0.Output Stimulations -> Stimulation based epoching "Eyes Open epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
  Stimulation 6 = OVTK_StimulationId_Label_0A
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaWaveClassifier
#0.Output Stimulations -> Stimulation Filter => #9
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_09
  Stimulation range end = OVTK_StimulationId_Label_0A
#0.Output Stimulations -> Stimulation Converter => #10
  Keep other stimulations = false
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Up
  Stimulation to send = OVTK_StimulationId_Label_09
#0.Output Stimulations -> Stimulation Converter => #11
  Keep other stimulations = false
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Down
  Stimulation to send = OVTK_StimulationId_Label_09
Input stimulations 1=#9, Input stimulations 2=#10, Input stimulations 3=#11 -> Stimulation multiplexer => #12
Targets=#12, Classifier 1=#8.Labels -> Classifier Accuracy Measure
