OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, Spatial Filter box, and Classifier Processor to correct directory

  Generic Stream Reader should be testing data
Comment
  Reference

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
Settings
  Epoch Duration = 2
  Epoch Offset = 0
  Customized DSP Formula = abs(x)
  Cutoff Frequency 1a = 6.5
  Cutoff Frequency 1b = 7.5
  Cutoff Frequency 2a = 8.5
  Cutoff Frequency 2b = 9.5
  Cutoff Frequency 3a = 10.5
  Cutoff Frequency 3b = 11.5
  Cutoff Frequency 4a = 12.5
  Cutoff Frequency 4b = 13.5

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Bandpass (1a - 4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Temporal filter "Bandstop (1b - 2a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
-> Temporal filter "Bandstop (2b - 3a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
-> Temporal filter "Bandstop (3b - 4a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
-> Stage 2 Spatial Filter => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 2
Input stream 1=#6, Input stream 2=#0.Output Stimulations -> Identity => #7
Input signal=#7.Output stream 1, Input stimulations=#7.Output stream 2 -> Stimulation based epoching "Confused SSVEP epoching" => #8
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Signal Power Log => #10
#8 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Signal Power Log => #12
#8 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Signal Power Log => #14
#8 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Signal Power Log => #16
Input stream 1=#10, Input stream 2=#12, Input stream 3=#14, Input stream 4=#16 -> Feature aggregator => #17
Features=#17 -> Classifier processor => #18
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/my-classifier-signal-power-log
#0.Output Stimulations -> Stimulation Filter
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_0A
  Stimulation range end = OVTK_StimulationId_Label_0A
-> Stimulation Filter => #20
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
Targets=#20, Classification results=#18.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Up
  Class 2 = OVTK_GDF_Right
  Class 3 = OVTK_GDF_Left
  Class 4 = OVTK_GDF_Down
  Class 5 = OVTK_StimulationId_Label_09
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#20, Classifier 1=#18.Labels -> Classifier Accuracy Measure
