OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Settings
  Epoch Duration = 2
  Epoch Offset = 0
  Customized DSP Formula = abs(x)
  Cutoff Frequency 1a = 6.7
  Cutoff Frequency 1b = 7.3
  Cutoff Frequency 2a = 8.7
  Cutoff Frequency 2b = 9.3
  Cutoff Frequency 3a = 10.7
  Cutoff Frequency 3b = 11.3
  Cutoff Frequency 4a = 12.7
  Cutoff Frequency 4b = 13.3

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha Wave"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaCSP
#1 -> Temporal filter "Bandpass (1a - 4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Temporal filter "Bandstop (1b - 2a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
-> Temporal filter "Bandstop (2b - 3a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
-> Temporal filter "Bandstop (3b - 4a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
-> Stage 2 Spatial Filter => #8
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 2
Clock stimulator => #9
  Interstimulation interval (in sec) = 1
  Stimulation = OVTK_StimulationId_Label_0A
Input signal=#3, Input stimulations=#9 -> Stimulation based epoching "Confused Alpha Epoching"
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
  Stimulation 6 = OVTK_StimulationId_Label_0A
  Stimulation 7 = OVTK_StimulationId_Label_08
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #13
Features=#13 -> Classifier processor => #14
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaWaveClassifier
Input stream 1=#8, Input stream 2=#14.Labels -> Identity => #15
Input signal=#15.Output stream 1, Input stimulations=#15.Output stream 2 -> Stimulation based epoching "Confused SSVEP epoching" => #16
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = -4
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Signal Power Log => #18
#16 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Signal Power Log => #20
#16 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Signal Power Log => #22
#16 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Signal Power Log => #24
Input stream 1=#18, Input stream 2=#20, Input stream 3=#22, Input stream 4=#24 -> Feature aggregator => #25
Features=#25 -> Classifier processor => #26
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/my-classifier-signal-power-log
New input=#26.Labels, New input(1)=#14.Labels -> Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files/MATLAB/R2022b/bin/win64/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = Stimulation_Verification_Initialize
  Process function = Stimulation_Verification_Process
  Uninitialize function = Stimulation_Verification_Uninitialize
  Forward Stimulation = OVTK_GDF_Up
  Backwards Stimulation = OVTK_GDF_Down
  Left Turn Stimulation = OVTK_GDF_Left
  Right Turn Stimulation = OVTK_GDF_Right
  Stop = OVTK_StimulationId_Label_09
  Extra 1 = OVTK_StimulationId_Label_0A
  Extra 2 = OVTK_StimulationId_Label_08
