OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Need to reconfigure Generic Stream Reader, Spatial Filter box, and Classifier Processor to correct directory

  Generic Stream Reader should be testing data
Comment
  Reference

  The stimulation codes will be:

  OVTK_GDF_Up (7 Hz)
  OVTK_GDF_Right (9 Hz)
  OVTK_GDF_Left (11 Hz)
  OVTK_GDF_Down (13 Hz)
  OVTK_StimulationId_Label_01 (End Label)
Settings
  Epoch Duration = 2
  Epoch Offset = 0
  Customized DSP Formula = abs(x)
  Cutoff Frequency 1a = 6.5
  Cutoff Frequency 1b = 7.5
  Cutoff Frequency 2a = 8.5
  Cutoff Frequency 2b = 9.5
  Cutoff Frequency 3a = 10.5
  Cutoff Frequency 3b = 11.5
  Cutoff Frequency 4a = 12.5
  Cutoff Frequency 4b = 13.5

Generic stream reader => #0
  Filename = C:/Users/roenz/Desktop/SSVEP Car Project/Data/Data-[2025.04.08-20.32.02]
#0.Output Signal -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha Wave"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaCSP
Input signal=#3, Input stimulations=#0.Output Stimulations -> Stimulation based epoching "Confused Alpha Epoching"
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
  Stimulation 6 = OVTK_StimulationId_Label_0A
-> Simple DSP
  Equation = abs(x)
-> Signal average
-> Feature aggregator => #7
Features=#7 -> Classifier processor => #8
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/AlphaWaveClassifier
#8.Labels -> Stimulation Filter => #9
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_Label_09
  Stimulation range end = OVTK_StimulationId_Label_09
#1 -> Temporal filter "Bandpass (1a - 4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Temporal filter "Bandstop (1b - 2a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
-> Temporal filter "Bandstop (2b - 3a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
-> Temporal filter "Bandstop (3b - 4a)"
  Filter Type = Band Stop
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
-> Stage 2 Spatial Filter => #14
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/CSP Spatial Filter Stage 2
Input stream 1=#14, Input stream 2=#8.Labels -> Identity => #15
Input signal=#15.Output stream 1, Input stimulations=#15.Output stream 2 -> Stimulation based epoching "Confused SSVEP epoching" => #16
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation 1 = OVTK_GDF_Up
  Stimulation 2 = OVTK_GDF_Right
  Stimulation 3 = OVTK_GDF_Left
  Stimulation 4 = OVTK_GDF_Down
  Stimulation 5 = OVTK_StimulationId_Label_09
-> Temporal filter "Bandpass (1a-1b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 1a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 1b}
-> Signal Power Log => #18
#16 -> Temporal filter "Bandpass (2a-2b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 2a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 2b}
-> Signal Power Log => #20
#16 -> Temporal filter "Bandpass (3a-3b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 3a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 3b}
-> Signal Power Log => #22
#16 -> Temporal filter "Bandpass (4a-4b)"
  Filter Type = Band Pass
  Filter Order = 8
  Low Cut-off Frequency (Hz) = $var{Cutoff Frequency 4a}
  High Cut-off Frequency (Hz) = $var{Cutoff Frequency 4b}
-> Signal Power Log => #24
Input stream 1=#18, Input stream 2=#20, Input stream 3=#22, Input stream 4=#24 -> Feature aggregator => #25
Features=#25 -> Classifier processor => #26
  Filename to load configuration from = C:/Users/roenz/Desktop/SSVEP Car Project/Classifier or CSP/my-classifier-signal-power-log
Input stimulations 1=#26.Labels, Input stimulations 2=#9 -> Stimulation multiplexer => #27
Targets=#0.Output Stimulations, Classification results=#27 -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Up
  Class 2 = OVTK_GDF_Right
  Class 3 = OVTK_GDF_Left
  Class 4 = OVTK_GDF_Down
  Class 5 = OVTK_StimulationId_Label_09
  Class 6 = OVTK_StimulationId_Label_0A
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#27 -> Stimulation listener
  Log level to use = Information
#0.Output Stimulations -> 0x341d3912 Stimulation Filter => #31
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_09
  Stimulation range end = OVTK_StimulationId_Label_0A
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Up
  Action to perform(2) = Select
  Stimulation range begin(2) = OVTK_GDF_Down
  Stimulation range end(2) = OVTK_GDF_Left
Targets=#31, Classifier 1=#27 -> 0x341d3912 Classifier Accuracy Measure
