OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)
Comment
  Press U when looking at low frequency
  Press I when looking at medium frequency
  Press O when done with data collection
Comment
  Modify Filtering to be +/- the selected frequency

  Edit frequency in scenario configuration
Comment
  generic stream writer: file address
  display cue image: file address
Settings
  Low Frequency = 7
  Medium Frequency = 12

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
0x341d3912 Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Data=#1, Stimulations=#2 -> 0x341d3912 Signal display "Raw Signal"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input Signal=#1, Input Stimulations=#2 -> 0x341d3912 Generic stream writer
  Filename = C:/Users/roenz/Desktop/FlashingBoxesBCI/Data4
  Use compression = false
#2 -> 0x341d3912 Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/roenz/Desktop/FlashingBoxesBCI/Low Frequency Selected.jpg
  Stimulation 1 = OVTK_StimulationId_Label_07
  Cue Image 2 = C:/Users/roenz/Desktop/FlashingBoxesBCI/High Frequency Selected.jpg
  Stimulation 2 = OVTK_StimulationId_Label_08

Lua Stimulator
  Lua Script = C:/Users/roenz/Desktop/FlashingBoxesBCI/BaselineLuaScript.txt
  Frequency = $var{Low Frequency}
-> Low Frequency
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Reset
  Cue Image 1 = C:/Users/roenz/Desktop/FlashingBoxesBCI/BlackJPG.jpg
  Stimulation 1 = OVTK_StimulationId_Number_1A
  Cue Image 2 = C:/Users/roenz/Desktop/FlashingBoxesBCI/WhiteJPG.jpg
  Stimulation 2 = OVTK_StimulationId_Number_1B

Lua Stimulator
  Lua Script = C:/Users/roenz/Desktop/FlashingBoxesBCI/BaselineLuaScript.txt
  Frequency = $var{Medium Frequency}
-> Medium Frequency
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_Reset
  Cue Image 1 = C:/Users/roenz/Desktop/FlashingBoxesBCI/BlackJPG.jpg
  Stimulation 1 = OVTK_StimulationId_Number_1A
  Cue Image 2 = C:/Users/roenz/Desktop/FlashingBoxesBCI/WhiteJPG.jpg
  Stimulation 2 = OVTK_StimulationId_Number_1B

Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_GDF_Feedback_Continuous
  Button 1 OFF = OVTK_GDF_End_Of_Trial
